PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1, 1, 1]
  expName = attention_network_task
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instr
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    ImageComponent background
      image = background.png
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent startresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent inst1textbox
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      size = (1.1, 0.9)
      startVal [time (s)] = 0.0
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      text:
        Welcome to this experiment.

        In this task, you will be presented with a central arrow surrounded by arrows or blocks. The central arrow will point left or right.

        Sometimes the flanking arrows will be pointing in the same direction as the central arrow, and sometimes the flanking arrows will point in the oppoiste direction to the central arrow.

        eg. >>>>> or >><>>

        Your task is to respond to the direction of the central arrow.

        If the central arrow points to the right, press the right arrow key and if the arrow points to the left, press the left arrow key.

        Press the space bar to continue.
  Routine instr2
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    ImageComponent background_2
      image = background.png
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent startresp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent inst1textbox_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      size = (1.1, 0.9)
      startVal [time (s)] = 0.0
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      text:
        In this task, you must respond to the direction of the centre arrow using the arrow keys.

        First, a fixation cross will appear in the centre of the screen. The fixation is sometimes followed by blocks on the screen, which may or may not
        cue the location of the target stimulus. If the blocks appear after the fixation, it means that the target will appear shortly.

        If the blocks appears either above OR below the fixation cross, the target will shortly appear in that cued location.


        Place your index fingers on the left and right keys ready to start, and press the spacebar to proceed.
  Routine fixation
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    ImageComponent background_3
      image = background.png
      size = (2, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDuration
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    CodeComponent fix_dur_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Create durations
        durations = [0.4,  0.45, 0.5,  0.55]
      Begin Routine:
        # Randomize durations
        shuffle(durations)

        # Take one of the randomized durations
        fixDuration  = durations[0]
      End Routine:
        # save duration used to csv output
        thisExp.addData("fixDuration", fixDuration)
    ImageComponent image
      image = stim/fix.png
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDuration
      units = height
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    TextboxComponent trial_counter_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -0.45)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDuration
      text [set every repeat] = $str(trials.thisN+1) + '/' + str(trials.nTotal)
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    TextboxComponent reminder
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDuration
      text = Respond to the direction of the central arrow using the left and right keys on your keyboard.
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  Routine trial
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    ImageComponent background_4
      image = background.png
      size = (2, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.2
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    ImageComponent cues
      image [set every repeat] = $cue
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .1
      units = height
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    ImageComponent target
      image [set every repeat] = $tar
      ori [set every repeat] = $targOrientation
      size = (0.25, 0.25)
      startVal [time (s)] = .5
      stopVal [duration (s)] = 1.7
      units = height
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = .5
      stopVal [duration (s)] = 1.7
      store = first key
      storeCorrect = True
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    ImageComponent fixationshort
      image = stim/fix.png
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = height
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    TextboxComponent trial_counter
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -0.45)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.2
      text [set every repeat] = $str(trials.thisN+1) + '/' + str(trials.nTotal)
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    TextboxComponent reminder_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.2
      text = Respond to the direction of the central arrow using the left and right keys on your keyboard.
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  Routine feedback
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    ImageComponent background_5
      image = background.png
      size = (2, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Experiment:
        # create empty string to present feedback
        msg = ''
        correct_count = 0
      Begin Routine:
        # custom feedback message
        msg = "Incorrect!"
        fbcol = 'black'
        if resp.corr:
            msg = "Correct! Your RT is : " + str(int(resp.rt*1000)) + 'ms'
            correct_count  += 1
            fbcol = 'green'
        elif not resp.keys:
            msg = "Remember to respond!"
    TextComponent text
      color [set every repeat] = $fbcol
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg 
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    TextboxComponent trial_counter_3
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -0.45)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(trials.thisN+1) + '/' + str(trials.nTotal)
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    TextboxComponent reminder_3
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Respond to the direction of the central arrow using the left and right keys on your keyboard.
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  Routine End
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    ImageComponent background_6
      image = background.png
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    TextboxComponent inst1textbox_3
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      languageStyle = Arabic
      letterHeight = 0.05
      opacity = 0.8
      size = (1.1, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = لطفا تا ذخیره نتایج صبر کنید...
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    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract and organize data
        let organizedData = psychoJS._experiment._trialsData.map(trialData => {
            return {
                'instr.started': trialData['instr.started'] || '',
                'instr.stopped': trialData['instr.stopped'] || '',
                'participant': trialData['participant'] || '',
                'session': trialData['session'] || '',
                'date': trialData['date'] || '',
                'expName': trialData['expName'] || '',
                'psychopyVersion': trialData['psychopyVersion'] || '',
                'OS': trialData['OS'] || '',
                'frameRate': trialData['frameRate'] || '',
                'instr2.started': trialData['instr2.started'] || '',
                'instr2.stopped': trialData['instr2.stopped'] || '',
                'fixation.started': trialData['fixation.started'] || '',
                'fixation.stopped': trialData['fixation.stopped'] || '',
                'fixDuration': trialData['fixDuration'] || '',
                'trial.started': trialData['trial.started'] || '',
                'trial.stopped': trialData['trial.stopped'] || '',
                'resp.keys': trialData['resp.keys'] || '',
                'resp.corr': trialData['resp.corr'] || '',
                'resp.rt': trialData['resp.rt'] || '',
                'resp.duration': trialData['resp.duration'] || '',
                'feedback.started': trialData['feedback.started'] || '',
                'feedback.stopped': trialData['feedback.stopped'] || '',
                'trials.thisRepN': trialData['trials.thisRepN'] || '',
                'trials.thisTrialN': trialData['trials.thisTrialN'] || '',
                'trials.thisN': trialData['trials.thisN'] || '',
                'trials.thisIndex': trialData['trials.thisIndex'] || '',
                'trials.ran': trialData['trials.ran'] || '',
                'cue': trialData['cue'] || '',
                'tar': trialData['tar'] || '',
                'corrAns': trialData['corrAns'] || '',
                'targOrientation': trialData['targOrientation'] || ''
            };
        });

        // Convert organized data to CSV
        let csvData = [Object.keys(organizedData[0])].concat(organizedData.map(it => Object.values(it).toString())).join('\n');

        // Send data to OSF via DataPipe
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'VgIiMiyNwW6P', // Your DataPipe experiment ID
                filename: filename,
                data: csvData,
            }),
        }).then(response => response.json()).then(data => {
            console.log(data);
            quitPsychoJS();
        });
      End JS Routine:
        let outputData = {
            headers: ["cue", "tar", "corrAns", "targOrientation", "thisN", "thisTrialN", "thisRepN", "trials.thisRepN", "trials.thisTrialN", "trials.thisN", "trials.thisIndex", "thisRow.t", "notes", "instr.started", "startresp.started", "inst1textbox.started", "instr.stopped", "instr2.started", "startresp2.started", "inst1textbox_2.started", "instr2.stopped", "fixation.started", "image.started", "trial_counter_2.started", "reminder.started", "image.stopped", "trial_counter_2.stopped", "reminder.stopped", "fixation.stopped", "trial.started", "text_fp1.started", "cues.started", "fixationshort.started", "trial_counter.started", "reminder_2.started", "text_fp2.started", "text_fp1.stopped", "cues.stopped", "target.started", "resp.started", "fixationshort.stopped", "participant", "session", "date", "expName", "psychopyVersion", "frameRate", "expStart"],
            rows: [
                // Add trial data rows here as arrays
            ]
        };

        // Add your rows programmatically here (loop through trials, etc.)

        // Send data to Google Apps Script
        fetch('https://script.google.com/macros/s/AKfycbxCv3vSZzdPwzjB8iGzLeroj-Oj8FSnNAVZzTWmwokvrOErR6HMMDd3UtZ2TFrTN6O_/exec', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json'
            },
            body: JSON.stringify(outputData)
        })
        .then(response => response.json())
        .then(data => console.log(data))
        .catch(error => console.error('Error:', error));
Flow
  Routine instr
  Routine instr2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': 'stim/upper.png', 'tar': 'stim/congLeft.png', 'corrAns': 'left', 'targOrientation': 0},
      {'cue': 'stim/both.png', 'tar': 'stim/congLeft.png', 'corrAns': 'left', 'targOrientation': 0},
      {'cue': 'stim/centre.png', 'tar': 'stim/congLeft.png', 'corrAns': 'left', 'targOrientation': 0},
      {'cue': 'stim/blank.png', 'tar': 'stim/congLeft.png', 'corrAns': 'left', 'targOrientation': 0},
      {'cue': 'stim/lower.png', 'tar': 'stim/congLeft.png', 'corrAns': 'right', 'targOrientation': 180},
      {'cue': 'stim/both.png', 'tar': 'stim/congLeft.png', 'corrAns': 'right', 'targOrientation': 180},
      {'cue': 'stim/centre.png', 'tar': 'stim/congLeft.png', 'corrAns': 'right', 'targOrientation': 180},
      {'cue': 'stim/blank.png', 'tar': 'stim/congLeft.png', 'corrAns': 'right', 'targOrientation': 180},
      {'cue': 'stim/upper.png', 'tar': 'stim/congRight.png', 'corrAns': 'right', 'targOrientation': 0},
      {'cue': 'stim/both.png', 'tar': 'stim/congRight.png', 'corrAns': 'right', 'targOrientation': 0},
      {'cue': 'stim/centre.png', 'tar': 'stim/congRight.png', 'corrAns': 'right', 'targOrientation': 0},
      {'cue': 'stim/blank.png', 'tar': 'stim/congRight.png', 'corrAns': 'right', 'targOrientation': 0},
      {'cue': 'stim/lower.png', 'tar': 'stim/congRight.png', 'corrAns': 'left', 'targOrientation': 180},
      {'cue': 'stim/both.png', 'tar': 'stim/congRight.png', 'corrAns': 'left', 'targOrientation': 180},
      {'cue': 'stim/centre.png', 'tar': 'stim/congRight.png', 'corrAns': 'left', 'targOrientation': 180}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
    Routine fixation
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine End
